# Generated by Configurator on Wed Jun 26 14:23:52 BST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM6,SerialManager,COM6
Device,COM2,SerialManager,COM2
Device,COM7,SerialManager,COM7
Device,COM3,SerialManager,COM3
Device,COM4,SerialManager,COM4
Device,LudlController,Ludl,LudlController
Device,XYStage,Ludl,XYStage
Device,AmScope,AmScope,AmScope
Device,FreeSerialPort,FreeSerialPort,FreeSerialPort
Device,OlympusHub,Olympus,OlympusHub
Device,Objective,Olympus,Objective
Device,LightPath,Olympus,LightPath
Device,FilterCube,Olympus,FilterCube
Device,TransmittedLamp,Olympus,TransmittedLamp
Device,ManualFocus,Olympus,ManualFocus

# Pre-init settings for devices
Property,LudlController,Port,COM5
Property,AmScope,Model,MU1403
Property,FreeSerialPort,Port,COM6
Property,OlympusHub,Port,COM2

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,9600
Property,COM5,DTR,Disable
Property,COM5,DataBits,8
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Fast USB to Serial,Disable
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM6,AnswerTimeout,500.0000
Property,COM6,BaudRate,19200
Property,COM6,DTR,Disable
Property,COM6,DataBits,8
Property,COM6,DelayBetweenCharsMs,0.0000
Property,COM6,Fast USB to Serial,Disable
Property,COM6,Handshaking,Off
Property,COM6,Parity,None
Property,COM6,StopBits,1
Property,COM6,Verbose,1
Property,COM2,AnswerTimeout,500.0000
Property,COM2,BaudRate,19200
Property,COM2,DTR,Disable
Property,COM2,DataBits,8
Property,COM2,DelayBetweenCharsMs,0.0000
Property,COM2,Fast USB to Serial,Disable
Property,COM2,Handshaking,Off
Property,COM2,Parity,Even
Property,COM2,StopBits,1.5
Property,COM2,Verbose,1
Property,COM7,AnswerTimeout,500.0000
Property,COM7,BaudRate,19200
Property,COM7,DTR,Disable
Property,COM7,DataBits,8
Property,COM7,DelayBetweenCharsMs,0.0000
Property,COM7,Fast USB to Serial,Disable
Property,COM7,Handshaking,Off
Property,COM7,Parity,Even
Property,COM7,StopBits,2
Property,COM7,Verbose,1
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,19200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Enable
Property,COM3,Handshaking,Off
Property,COM3,Parity,Even
Property,COM3,StopBits,2
Property,COM3,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,Even
Property,COM4,StopBits,2
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ManualFocus,0

# Roles
Property,Core,Camera,AmScope
Property,Core,Focus,ManualFocus
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Objective
Label,Objective,5,Position-6
Label,Objective,4,Position-5
Label,Objective,3,Position-4
Label,Objective,2,Position-3
Label,Objective,1,Position-2
Label,Objective,0,Position-1
# LightPath
Label,LightPath,1,Side Port
Label,LightPath,0,Eye
# FilterCube
Label,FilterCube,5,Position-6
Label,FilterCube,4,Position-5
Label,FilterCube,3,Position-4
Label,FilterCube,2,Position-3
Label,FilterCube,1,Position-2
Label,FilterCube,0,Position-1
# TransmittedLamp
Label,TransmittedLamp,1,On
Label,TransmittedLamp,0,Off

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

